{"cfgformat": "20181205", "comments": {"author": "Stijn van de Schoot, Amsterdam UMC", "creator": "Scite", "description": "WAD2 module for MR analysis (Geometric accuracy)", "version": "20190128"}, "actions": {"Data Validation": {"filters": {}, "params": {"Patients Name": "Geometric Fidelity QA", "Number of data series": "7"}}, "Acquisition DateTime": {"filters": {}, "params": {}}, "Phantom Analysis": {"filters": {}, "params": {"Phantom Type": "AMCPhantom"}}}, "info": {"Data Validation": {"params": {"Patients Name": "The name of the patient (-).", "Number of data series": "The expected number of data series (-)."}}, "Acquisition DateTime": {"params": {}}, "Phantom Analysis": {"params": {"Phantom Type": "The type of phantom used. For the AMC phantom use 'AMCPhantom'."}}}}